CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:27
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:2
    Metadata extraction method:Extract from image file headers
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    Extract metadata from:All images
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    Does cached metadata exist?:Yes
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:MAX_ko6_TOP1cc-TRF2_shSOD-NAC_
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (metadata does C "0")
    Name to assign these images:Nuclei
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "1")
    Name to assign these images:TOP1
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (metadata does C "2")
    Name to assign these images:TRF2
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:Nuclei
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):100,550
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:0.4
    Lower and upper bounds on threshold:0.005,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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
EnhanceOrSuppressFeatures:[module_num:6|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
    Select the input image:TOP1
    Name the output image:enhancedTOP1
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
IdentifyPrimaryObjects:[module_num:7|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
    Select the input image:enhancedTOP1
    Name the primary objects to be identified:IdentifiedTOP1foci
    Typical diameter of objects, in pixel units (Min,Max):2,10
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.1,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
MaskObjects:[module_num:8|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
    Select objects to be masked:IdentifiedTOP1foci
    Name the masked objects:MaskedTOP1
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

RelateObjects:[module_num:9|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
    Parent objects:Nuclei
    Child objects:MaskedTOP1
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
EnhanceOrSuppressFeatures:[module_num:10|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
    Select the input image:TRF2
    Name the output image:EnhancedTRF2
    Select the operation:Enhance
    Feature size:10
    Feature type:Speckles
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    Speed and accuracy:Fast
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
IdentifyPrimaryObjects:[module_num:11|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
    Select the input image:EnhancedTRF2
    Name the primary objects to be identified:IdentifiedTRF2foci
    Typical diameter of objects, in pixel units (Min,Max):2,10
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.1,1.0
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    Two-class or three-class thresholding?:Two classes
    Log transform before thresholding?:No
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
MaskObjects:[module_num:12|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
    Select objects to be masked:IdentifiedTRF2foci
    Name the masked objects:MaskedTRF2
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:Nuclei
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

RelateObjects:[module_num:13|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
    Parent objects:Nuclei
    Child objects:MaskedTRF2
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
MaskObjects:[module_num:14|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
    Select objects to be masked:MaskedTOP1
    Name the masked objects:colocolasingFoci
    Mask using a region defined by other objects or by binary image?:Objects
    Select the masking object:MaskedTRF2
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    Handling of objects that are partially masked:Keep overlapping region
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    Numbering of resulting objects:Renumber
    Invert the mask?:No

RelateObjects:[module_num:15|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
    Parent objects:Nuclei
    Child objects:colocolasingFoci
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:No
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
OverlayOutlines:[module_num:16|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
    Display outlines on a blank image?:Yes
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    Name the output image:nucleioutlines
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#1104FB
    Select objects to display:Nuclei
    Select outline color:#00C600
    Select objects to display:MaskedTOP1
    Select outline color:#F00F25
    Select objects to display:MaskedTRF2

OverlayOutlines:[module_num:17|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:enhancedTOP1
    Name the output image:TOP1
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:#00BB00
    Select objects to display:MaskedTOP1

OverlayOutlines:[module_num:18|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
    Display outlines on a blank image?:No
    Select image on which to display outlines:EnhancedTRF2
    Name the output image:TRF2
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:Red
    Select objects to display:MaskedTRF2

SaveImages:[module_num:19|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
    Select the type of image to save:Image
    Select the image to save:nucleioutlines
    Select method for constructing file names:From image filename
    Select image name for file prefix:Nuclei
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_nuclei
    Saved file format:png
    Output file location:Default Input Folder sub-folder|Desktop\\CELL PROFILER IMAGES
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:20|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
    Select the type of image to save:Image
    Select the image to save:TOP1
    Select method for constructing file names:From image filename
    Select image name for file prefix:TOP1
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:TOP1
    Saved file format:png
    Output file location:Default Input Folder sub-folder|Desktop\\CELL PROFILER IMAGES
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:21|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
    Select the type of image to save:Image
    Select the image to save:TRF2
    Select method for constructing file names:From image filename
    Select image name for file prefix:TRF2
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_TRF2
    Saved file format:png
    Output file location:Default Input Folder sub-folder|Desktop\\CELL PROFILER IMAGES
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

MeasureObjectIntensity:[module_num:22|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
    Select images to measure:enhancedTOP1
    Select objects to measure:MaskedTOP1

MeasureObjectIntensity:[module_num:23|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
    Select images to measure:EnhancedTRF2
    Select objects to measure:MaskedTRF2

MeasureObjectSizeShape:[module_num:24|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
    Select object sets to measure:MaskedTOP1
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureObjectSizeShape:[module_num:25|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
    Select object sets to measure:MaskedTRF2
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureObjectSizeShape:[module_num:26|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
    Select object sets to measure:colocolasingFoci
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

ExportToSpreadsheet:[module_num:27|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Input Folder sub-folder|Desktop\\CELL PROFILER IMAGES
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:Data_
    Overwrite existing files without warning?:No
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